---
API: 2
OpenSesame: 3.0.7b1
Platform: posix
---
set width 1680
set uniform_coordinates yes
set title "perceptual identification task"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1050
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/mathcog/Desktop/estesReplication/procedure"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sketchpad contextWord
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[contextWord]" x=0 y=0 z_index=0

define sketchpad contextWord_1
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[contextWord]" x=0 y=0 z_index=0

define sketchpad cueWord
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=no show_if=always text="[cueWord]" x=0 y=0 z_index=0

define sketchpad cueWord_1
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=no show_if=always text="[cueWord]" x=0 y=0 z_index=0

define sketchpad delay
	set duration 50
	set description "Displays stimuli"

define sketchpad delay_1
	set duration 50
	set description "Displays stimuli"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruction1 always
	run practiceBlock always
	run instruction2 always
	run experimentalBlock always
	run instruction3 always

define loop experimentalBlock
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item experimentalSequence
	set description "Repeatedly runs another item"
	set cycles 120
	set continuous no
	set column_order "stimulus;cueWord;location;contextWord;trialType"
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimulus "x"
	setcycle 0 cueWord "snout"
	setcycle 0 location "top"
	setcycle 0 contextWord "bear"
	setcycle 0 trialType "test"
	setcycle 1 stimulus "o"
	setcycle 1 cueWord "claw"
	setcycle 1 location "bottom"
	setcycle 1 contextWord "bear"
	setcycle 1 trialType "test"
	setcycle 2 stimulus "x"
	setcycle 2 cueWord "curtains"
	setcycle 2 location "top"
	setcycle 2 contextWord "bedroom"
	setcycle 2 trialType "test"
	setcycle 3 stimulus "o"
	setcycle 3 cueWord "carpet"
	setcycle 3 location "bottom"
	setcycle 3 contextWord "bedroom"
	setcycle 3 trialType "test"
	setcycle 4 stimulus "x"
	setcycle 4 cueWord "seat"
	setcycle 4 location "top"
	setcycle 4 contextWord "bicycle"
	setcycle 4 trialType "test"
	setcycle 5 stimulus "o"
	setcycle 5 cueWord "tire"
	setcycle 5 location "bottom"
	setcycle 5 contextWord "bicycle"
	setcycle 5 trialType "test"
	setcycle 6 stimulus "x"
	setcycle 6 cueWord "eye"
	setcycle 6 location "top"
	setcycle 6 contextWord "bird"
	setcycle 6 trialType "test"
	setcycle 7 stimulus "o"
	setcycle 7 cueWord "talon"
	setcycle 7 location "bottom"
	setcycle 7 contextWord "bird"
	setcycle 7 trialType "test"
	setcycle 8 stimulus "x"
	setcycle 8 cueWord "cap"
	setcycle 8 location "top"
	setcycle 8 contextWord "bottle"
	setcycle 8 trialType "test"
	setcycle 9 stimulus "o"
	setcycle 9 cueWord "coaster"
	setcycle 9 location "bottom"
	setcycle 9 contextWord "bottle"
	setcycle 9 trialType "test"
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	setcycle 30 stimulus "o"
	setcycle 30 cueWord "lamp"
	setcycle 30 location "top"
	setcycle 30 contextWord "floor"
	setcycle 30 trialType "test"
	setcycle 31 stimulus "x"
	setcycle 31 cueWord "rug"
	setcycle 31 location "bottom"
	setcycle 31 contextWord "floor"
	setcycle 31 trialType "test"
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	setcycle 60 stimulus "x"
	setcycle 60 cueWord "brake"
	setcycle 60 location "top"
	setcycle 60 contextWord "cable"
	setcycle 60 trialType "filler"
	setcycle 61 stimulus "o"
	setcycle 61 cueWord "pulley"
	setcycle 61 location "bottom"
	setcycle 61 contextWord "cable"
	setcycle 61 trialType "filler"
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	setcycle 90 stimulus "o"
	setcycle 90 cueWord "rash"
	setcycle 90 location "top"
	setcycle 90 contextWord "birth"
	setcycle 90 trialType "filler"
	setcycle 91 stimulus "x"
	setcycle 91 cueWord "cramp"
	setcycle 91 location "bottom"
	setcycle 91 contextWord "birth"
	setcycle 91 trialType "filler"
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	run experimentalSequence

define sequence experimentalSequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1 always
	run contextWord_1 always
	run cueWord_1 always
	run delay_1 always
	run upperStimulus_1 "[location]=top"
	run lowerStimulus_1 "[location]=bottom"
	run response_1 always
	run logger always

define sketchpad fixation
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad instruction1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Thank you for participating in this experiment.<br />The experiment typically takes about 10 minutes to complete.<br /><br />Each trial of the experiment has two parts.  <br />In the first part, you will simply read a pair of words. <br />You won't need to respond to the word pair...just consider <br />what it might mean.<br /><br />Then, after about one second,the letter 'X' or 'O' <br />will appear at the top or bottom of the screen.<br /><br />For these, your task is to type the letter ('X' or 'O')<br />as quickly as you can.  Please try to respond as quickly <br />as you can, without making errors.<br /><br />The computer will be timing your responses.  So you get an <br />idea of what the experiment will be like, you'll do<br />a few practice trials before the real experiment.<br /><br />When you're ready to begin the practice trials,<br />press the spacebar." x=-416 y=-288 z_index=0

define sketchpad instruction2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You've finished the practice trials.  The real<br />experimental trials will be just like the ones you<br />just did.<br /><br />Just remember to press the 'X' or 'O' key as fast<br />as you can after reading the word pairs.<br /><br />Whenever you're ready to start the real experiment,<br />press the spacebar, and it will begin immediately." x=-416 y=-288 z_index=0

define sketchpad instruction3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Thank you for your participation!<br /><br />If you have questions about this experiment, <br />please ask your experimenter, or contact <br />Dr. Thomas Faulkenberry at faulkenberry@tarleton.edu" x=-416 y=-288 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log contextWord
	log cueWord
	log location
	log stimulus
	log trialType
	log response_time
	log correct

define sketchpad lowerStimulus
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=42 html=yes show_if=always text="[stimulus]" x=0 y=320 z_index=0

define sketchpad lowerStimulus_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=42 html=yes show_if=always text="[stimulus]" x=0 y=320 z_index=0

define loop practiceBlock
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item practiceSequence
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set column_order "stimulus;cueWord;location;contextWord"
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimulus "x"
	setcycle 0 cueWord "wreath"
	setcycle 0 location "top"
	setcycle 0 contextWord "floral"
	setcycle 1 stimulus "o"
	setcycle 1 cueWord "perfume"
	setcycle 1 location "bottom"
	setcycle 1 contextWord "floral"
	setcycle 2 stimulus "x"
	setcycle 2 cueWord "members"
	setcycle 2 location "top"
	setcycle 2 contextWord "historical"
	setcycle 3 stimulus "o"
	setcycle 3 cueWord "elders"
	setcycle 3 location "bottom"
	setcycle 3 contextWord "historical"
	setcycle 4 stimulus "x"
	setcycle 4 cueWord "instincts"
	setcycle 4 location "top"
	setcycle 4 contextWord "marital"
	setcycle 5 stimulus "x"
	setcycle 5 cueWord "preparation"
	setcycle 5 location "bottom"
	setcycle 5 contextWord "marital"
	setcycle 6 stimulus "o"
	setcycle 6 cueWord "resources"
	setcycle 6 location "top"
	setcycle 6 contextWord "national"
	setcycle 7 stimulus "x"
	setcycle 7 cueWord "police"
	setcycle 7 location "bottom"
	setcycle 7 contextWord "national"
	setcycle 8 stimulus "o"
	setcycle 8 cueWord "equipment"
	setcycle 8 location "top"
	setcycle 8 contextWord "paper"
	setcycle 9 stimulus "x"
	setcycle 9 cueWord "staples"
	setcycle 9 location "bottom"
	setcycle 9 contextWord "paper"
	run practiceSequence

define sequence practiceSequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run contextWord always
	run cueWord always
	run delay always
	run upperStimulus "[location]=top"
	run lowerStimulus "[location]=bottom"
	run response always

define keyboard_response response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[stimulus]"
	set allowed_responses "X;O"

define keyboard_response response_1
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[stimulus]"
	set allowed_responses "X;O"

define sketchpad upperStimulus
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=42 html=yes show_if=always text="[stimulus]" x=0 y=-320 z_index=0

define sketchpad upperStimulus_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=42 html=yes show_if=always text="[stimulus]" x=0 y=-320 z_index=0

